PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = mask_rater
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Routines
  Routine trial
    FormComponent form
      Data Format = rows
      Item Padding = 0.05
      Items = response_form.csv
      Pos = (0,-1)
      Randomize = True
      Size = (1.1,.2)
      Text Height = .025
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
    ImageComponent image
      image [set every repeat] = $images
      pos = [0,225]
      saveStartStop = False
      size = [450, 350]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space','enter','return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      font = Hiragino Kaku Gothic
      letterHeight = 25
      pos = (0, -150)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Press 'space' after selecting your answer.
        回答したあと、スペースキーを押してください。
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      Begin Routine:
        myCount = myCount + 1
        if myCount > 50:
            trials.finished = True
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
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      OrderedDict([('categories', 'lipiko'), ('culture', 'Makonde'), ('images', 'images/i4I6826j.jpg'), ('materials', 'Hair'), ('period', 'XIX-XXth'), ('region', 'Mozambique'), ('size', 30.0)]),
      OrderedDict([('categories', 'okua'), ('culture', 'Idoma'), ('images', 'images/ra79726E.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 22.5)]),
      OrderedDict([('categories', 'akpan'), ('culture', 'Ibibio'), ('images', 'images/fLLa726R.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 30.0)]),
      OrderedDict([('categories', 'agba'), ('culture', 'Igala'), ('images', 'images/jSc9726i.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 34.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Ekoi'), ('images', 'images/O2uf726o.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 28.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Bokyi'), ('images', 'images/U30f726P.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 28.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Ekoi'), ('images', 'images/S6b36b40.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 18.0)]),
      OrderedDict([('categories', 'ungulali'), ('culture', 'Idoma'), ('images', 'images/klBf726b.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 26.0)]),
      OrderedDict([('categories', 'nkwambok'), ('culture', 'Bokyi'), ('images', 'images/gdHe7269.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 40.0)]),
      OrderedDict([('categories', 'ikem'), ('culture', 'Ekoi'), ('images', 'images/GeCf726h.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 50.0)]),
      OrderedDict([('categories', 'ngkpw√©'), ('culture', 'Bamileke'), ('images', 'images/dzt3826o.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cameroon'), ('size', 31.0)]),
      OrderedDict([('categories', 'Basketwork'), ('culture', 'Kapriman'), ('images', 'images/KrWe87ds.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Blackwater'), ('size', 111.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Bini'), ('images', 'images/BBWf326F.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 16.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Ibibio'), ('images', 'images/iFlb426U.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 23.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/7lc5526V.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 28.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Bete'), ('images', 'images/vFP9526R.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Lega'), ('images', 'images/VxWa526w.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 21.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Ibibio'), ('images', 'images/cVn3626e.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 13.5)]),
      OrderedDict([('categories', 'ntomo'), ('culture', 'Bamana'), ('images', 'images/3xT5626R.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Mali'), ('size', 36.0)]),
      OrderedDict([('categories', 'tatanua'), ('culture', 'Malagan'), ('images', 'images/qAm8326E.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'New'), ('size', 45.0)]),
      OrderedDict([('categories', 'okuy'), ('culture', 'Punu'), ('images', 'images/jxR0426H.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 29.0)]),
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      OrderedDict([('categories', 'tatanua'), ('culture', 'Malagan'), ('images', 'images/tuc6a976.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'New'), ('size', 28.0)]),
      OrderedDict([('categories', 'gunye'), ('culture', 'Dan'), ('images', 'images/72z2fc4P.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 22.0)]),
      OrderedDict([('categories', 'gu'), ('culture', 'Guro'), ('images', 'images/kUdea97i.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 34.0)]),
      OrderedDict([('categories', 'kagle'), ('culture', 'Dan'), ('images', 'images/N7d3c97N.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 22.0)]),
      OrderedDict([('categories', 'mwana'), ('culture', 'Lwena'), ('images', 'images/94C4c97g.jpg'), ('materials', 'Hair'), ('period', 'XIX-XXth'), ('region', 'Angola'), ('size', 30.0)]),
      OrderedDict([('categories', 'deangle'), ('culture', 'Dan'), ('images', 'images/Q8K8a973.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 23.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/zeq6597A.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.0)]),
      OrderedDict([('categories', 'kifwebe'), ('culture', 'Luba'), ('images', 'images/HyZ9597N.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 35.0)]),
      OrderedDict([('categories', 'idiok'), ('culture', 'Ibibio'), ('images', 'images/EEfec1eK.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 24.0)]),
      OrderedDict([('categories', 'okuy'), ('culture', 'Punu'), ('images', 'images/rpGf497c.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 25.0)]),
      OrderedDict([('categories', 't√©√©'), ('culture', 'Guere'), ('images', 'images/2gT7597y.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 27.0)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Akan'), ('images', 'images/cLwf497q.jpg'), ('materials', 'Brass'), ('period', 'XIX-XXth'), ('region', 'Ghana'), ('size', 7.0)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Akan'), ('images', 'images/dZuf497r.jpg'), ('materials', 'Brass'), ('period', 'XIX-XXth'), ('region', 'Ghana'), ('size', 4.5)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Dan'), ('images', 'images/C90f4977.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 7.0)]),
      OrderedDict([('categories', 'kipoko'), ('culture', 'Pende'), ('images', 'images/B7R9597g.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 12.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Kumu'), ('images', 'images/ter7622C.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 32.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Idoma'), ('images', 'images/BJn45229.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 33.0)]),
      OrderedDict([('categories', 'kifwebe'), ('culture', 'Songye'), ('images', 'images/DYz5322t.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 38.5)]),
      OrderedDict([('categories', 'okuy'), ('culture', 'Punu'), ('images', 'images/G46e672g.jpg'), ('materials', 'kaolin'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 31.0)]),
      OrderedDict([('categories', 'lipiko'), ('culture', 'Makonde'), ('images', 'images/x51bb07T.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Mozambique'), ('size', 35.0)]),
      OrderedDict([('categories', 'Helmet'), ('culture', 'Idoma'), ('images', 'images/TFs2c60J.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 41.0)]),
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      OrderedDict([('categories', 'ndoli'), ('culture', 'Mende'), ('images', 'images/Tv1429ab.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Sierra'), ('size', 40.0)]),
      OrderedDict([('categories', 'ndoli'), ('culture', 'Vai'), ('images', 'images/JJt429ad.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Sierra'), ('size', 39.5)]),
      OrderedDict([('categories', 'kipoko'), ('culture', 'Pende'), ('images', 'images/msn489aZ.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 31.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Ekoi'), ('images', 'images/dC3d49aR.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 43.5)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Bokyi'), ('images', 'images/lfLd49at.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 25.5)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Idoma'), ('images', 'images/Ltwe49a4.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 37.5)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Koro'), ('images', 'images/wzk559ab.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 36.0)]),
      OrderedDict([('categories', 'egungun'), ('culture', 'Yoruba'), ('images', 'images/3Bke59am.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 25.5)]),
      OrderedDict([('categories', 'epa'), ('culture', 'Yoruba'), ('images', 'images/iske59aG.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 69.0)]),
      OrderedDict([('categories', 'tungunga'), ('culture', 'Bamum'), ('images', 'images/AhAd612U.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cameroon'), ('size', 41.0)]),
      OrderedDict([('categories', 'ngkpw√©'), ('culture', 'Bamileke'), ('images', 'images/bPo669ai.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cameroon'), ('size', 32.0)]),
      OrderedDict([('categories', 'ndoma'), ('culture', 'Baule'), ('images', 'images/mer639a4.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 27.0)]),
      OrderedDict([('categories', 'ndoma'), ('culture', 'Baule'), ('images', 'images/vDra39aD.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 26.5)]),
      OrderedDict([('categories', 'ndoma'), ('culture', 'Baule'), ('images', 'images/k0la39aa.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 26.0)]),
      OrderedDict([('categories', 'garra'), ('culture', 'Bahinemo'), ('images', 'images/OSg309ax.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Hunstein'), ('size', 62.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/9sp7a8aG.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 47.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/6xr7a8aX.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 46.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/zs63c8aa.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 21.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/oXF3c8ap.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 22.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/pfk3c8aG.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 22.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/h8C8c8aX.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 27.0)]),
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      OrderedDict([('categories', 'Helmet'), ('culture', 'Pende'), ('images', 'images/U0h7bd08.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 29.0)]),
      OrderedDict([('categories', 'gelede'), ('culture', 'Yoruba'), ('images', 'images/A3z078eD.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 30.0)]),
      OrderedDict([('categories', 'gelede'), ('culture', 'Yoruba'), ('images', 'images/KKNc7d0N.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 32.0)]),
      OrderedDict([('categories', 'agbogho'), ('culture', 'Igbo'), ('images', 'images/c0Gc6d00.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 20.5)]),
      OrderedDict([('categories', 'ngoin'), ('culture', 'Bamileke'), ('images', 'images/TYQb8d0z.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Grasslands'), ('size', 36.0)]),
      OrderedDict([('categories', 'ndoli'), ('culture', 'Mende'), ('images', 'images/SsX83d07.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Sierra'), ('size', 39.0)]),
      OrderedDict([('categories', 'ndoli'), ('culture', 'Mende'), ('images', 'images/fkg83d0J.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Sierra'), ('size', 40.0)]),
      OrderedDict([('categories', 'ndoli'), ('culture', 'Mende'), ('images', 'images/4Qv83d0n.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Sierra'), ('size', 41.0)]),
      OrderedDict([('categories', 'gbetu'), ('culture', 'Gola'), ('images', 'images/nZg63d0c.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 61.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Anyang'), ('images', 'images/FGYb8d0i.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cameroon'), ('size', 18.5)]),
      OrderedDict([('categories', 'ngkpw√©'), ('culture', 'Anyang'), ('images', 'images/x2Ib8d0T.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cameroon'), ('size', 24.0)]),
      OrderedDict([('categories', 'garra'), ('culture', 'Bahinemo'), ('images', 'images/Fe4e1d0d.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Hunstein'), ('size', 97.5)]),
      OrderedDict([('categories', 'Portrait'), ('culture', 'Baule'), ('images', 'images/wmTbceed.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 28.0)]),
      OrderedDict([('categories', 'mblo'), ('culture', 'Baule'), ('images', 'images/wLdc4d00.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 29.0)]),
      OrderedDict([('categories', 'mblo'), ('culture', 'Baule'), ('images', 'images/0vIc4d05.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 28.0)]),
      OrderedDict([('categories', 'mblo'), ('culture', 'Baule'), ('images', 'images/QSz94d0W.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 21.0)]),
      OrderedDict([('categories', 'mblo'), ('culture', 'Baule'), ('images', 'images/OGO94d0O.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 40.0)]),
      OrderedDict([('categories', 'mblo'), ('culture', 'Baule'), ('images', 'images/HSg84d07.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 33.0)]),
      OrderedDict([('categories', 'cihongo'), ('culture', 'Tshokwe'), ('images', 'images/o5X411cG.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Angola'), ('size', 53.3)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dayak'), ('images', 'images/6tV118c5.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Kalimantan'), ('size', 31.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Toba'), ('images', 'images/mBC638cy.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Toba'), ('size', 51.5)]),
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      OrderedDict([('categories', 'bagle'), ('culture', 'Dan'), ('images', 'images/Rerce42w.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 21.0)]),
      OrderedDict([('categories', 'lipiko'), ('culture', 'Makonde'), ('images', 'images/QgB4152J.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Mozambique'), ('size', 25.5)]),
      OrderedDict([('categories', 'Helmet'), ('culture', 'Idoma'), ('images', 'images/VPa0052M.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 31.0)]),
      OrderedDict([('categories', 'gelede'), ('culture', 'Yoruba'), ('images', 'images/KPbbf42o.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 38.0)]),
      OrderedDict([('categories', 'gelede'), ('culture', 'Yoruba'), ('images', 'images/Y5Naf424.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 38.0)]),
      OrderedDict([('categories', 'mukyeem'), ('culture', 'Kuba'), ('images', 'images/8md21528.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 50.0)]),
      OrderedDict([('categories', 'molo'), ('culture', 'Bobo'), ('images', 'images/oUhb5e0z.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Burkina'), ('size', 137.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Ekoi'), ('images', 'images/c07df42h.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 42.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Ibibio'), ('images', 'images/JVIdf42d.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 50.0)]),
      OrderedDict([('categories', 'egungun'), ('culture', 'Yoruba'), ('images', 'images/jQZ7f42l.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 46.0)]),
      OrderedDict([('categories', 'ngkpw√©'), ('culture', 'Bamileke'), ('images', 'images/cZYc521j.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Grasslands'), ('size', 33.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/7Hl3cb0P.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 21.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/5n2e162f.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 40.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Baule'), ('images', 'images/qZuc162L.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 22.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Kwele'), ('images', 'images/ve8ba40c.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 38.0)]),
      OrderedDict([('categories', 'giwoyo'), ('culture', 'Pende'), ('images', 'images/Oqwdcb0o.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 63.0)]),
      OrderedDict([('categories', 'apuema'), ('culture', 'Kanak'), ('images', 'images/7An0362O.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'New'), ('size', 27.5)]),
      OrderedDict([('categories', 'gye'), ('culture', 'Yaure'), ('images', 'images/R77e1629.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 30.0)]),
      OrderedDict([('categories', 'gelede'), ('culture', 'Yoruba'), ('images', 'images/6I9e162P.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 30.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Haida'), ('images', 'images/V6L3a2f4.jpg'), ('materials', 'Cedar'), ('period', 'XIX-XXth'), ('region', 'Haida'), ('size', 27.5)]),
      OrderedDict([('categories', 'Basketwork'), ('culture', 'Asmat'), ('images', 'images/hFA00523.jpg'), ('materials', 'Vegetal'), ('period', 'XIX-XXth'), ('region', 'Central'), ('size', 37.0)]),
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      OrderedDict([('categories', 'Other'), ('culture', 'Idoma'), ('images', 'images/uWTe312k.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 24.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/HkLc312n.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'We'), ('images', 'images/WLA93123.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 28.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Guere'), ('images', 'images/5z27312l.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 34.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/YwG5312t.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 23.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Igbo'), ('images', 'images/Ho53312h.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 42.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/pnM1bf2c.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 20.5)]),
      OrderedDict([('categories', 'kpelye'), ('culture', 'Senufo'), ('images', 'images/f004512F.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 34.0)]),
      OrderedDict([('categories', 'pwo'), ('culture', 'Tshokwe'), ('images', 'images/VKc4612x.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Angola'), ('size', 23.5)]),
      OrderedDict([('categories', 'gunye'), ('culture', 'Dan'), ('images', 'images/t6F2312T.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 23.0)]),
      OrderedDict([('categories', 't√©√©'), ('culture', 'Bete'), ('images', 'images/V8Yc4ddD.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 29.0)]),
      OrderedDict([('categories', 'lipiko'), ('culture', 'Makonde'), ('images', 'images/1Kr3612w.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Tanzania'), ('size', 20.0)]),
      OrderedDict([('categories', 'g√§gon'), ('culture', 'Dan'), ('images', 'images/wHRf312a.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 26.0)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Dan'), ('images', 'images/jfm93129.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 12.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Timba'), ('images', 'images/aEE63318.jpg'), ('materials', 'Metal'), ('period', 'XIX-XXth'), ('region', 'Tanzania'), ('size', 31.1)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Bakwa'), ('images', 'images/esOa231h.jpg'), ('materials', 'Cowrie'), ('period', 'XIX-XXth'), ('region', ','), ('size', 50.9)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Bamileke'), ('images', 'images/hj8d131x.jpg'), ('materials', 'Bead'), ('period', 'XIX-XXth'), ('region', 'Cameroon'), ('size', 41.9)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Bamileke'), ('images', 'images/AZYb131m.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Batie'), ('size', 29.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Ibibio'), ('images', 'images/nejb131C.jpg'), ('materials', 'Hide'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 27.9)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/7tx3131d.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 30.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/0d02131G.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 24.1)]),
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      OrderedDict([('categories', 'Helmet'), ('culture', 'Igbo'), ('images', 'images/81j9172a.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 38.0)]),
      OrderedDict([('categories', 'ndoli'), ('culture', 'Dan'), ('images', 'images/Zc5d172f.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Sierra'), ('size', 38.0)]),
      OrderedDict([('categories', 'emboli'), ('culture', 'Kota'), ('images', 'images/GPA0372p.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 37.0)]),
      OrderedDict([('categories', 'Headdress'), ('culture', 'Idoma'), ('images', 'images/ErNe172L.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Cross'), ('size', 25.5)]),
      OrderedDict([('categories', 'Portrait'), ('culture', 'Baule'), ('images', 'images/hWGc172R.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Kuba'), ('images', 'images/hvG556eN.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 37.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Baga'), ('images', 'images/Tb2146e9.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Republic'), ('size', 42.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Punu'), ('images', 'images/kyRc36ej.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 34.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Bambara'), ('images', 'images/xIq936e9.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Mali'), ('size', 40.0)]),
      OrderedDict([('categories', 'ntomo'), ('culture', 'Bamana'), ('images', 'images/iTAb36ea.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Mali'), ('size', 57.0)]),
      OrderedDict([('categories', 'zambl√©'), ('culture', 'Guro'), ('images', 'images/mHe146eh.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 34.0)]),
      OrderedDict([('categories', 'pwoom'), ('culture', 'Kuba'), ('images', 'images/bR3246e8.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 18.5)]),
      OrderedDict([('categories', 'ndemba'), ('culture', 'Yaka'), ('images', 'images/uQ4f36eI.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 64.0)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Senufo'), ('images', 'images/hU9646eg.jpg'), ('materials', 'Brass'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 18.0)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Dan'), ('images', 'images/HzS646eJ.jpg'), ('materials', 'Brass'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 10.0)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Baule'), ('images', 'images/Zuo546e3.jpg'), ('materials', 'Metal'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 9.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'We'), ('images', 'images/LmR54b3w.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 30.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/4tPc4b3P.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 23.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Yaure'), ('images', 'images/rZpb4b3C.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 43.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Vuvi'), ('images', 'images/rk3c3b3U.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 22.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/tqR64b3V.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 22.5)]),
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      OrderedDict([('categories', 'Other'), ('culture', 'Pende'), ('images', 'images/siY34520.jpg'), ('materials', 'Tissue'), ('period', 'XIX-XXth'), ('region', 'Kasai'), ('size', 58.4)]),
      OrderedDict([('categories', 'bagle'), ('culture', 'Dan'), ('images', 'images/2Zy8f42G.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 20.3)]),
      OrderedDict([('categories', 'lipiko'), ('culture', 'Makonde'), ('images', 'images/R9j7552f.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Mozambique'), ('size', 22.9)]),
      OrderedDict([('categories', 'erin'), ('culture', 'Yoruba'), ('images', 'images/2g81152i.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 50.8)]),
      OrderedDict([('categories', 'Other'), ('culture', 'We'), ('images', 'images/FHY514e2.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 26.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/3pM414e4.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 21.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Guro'), ('images', 'images/fof414eJ.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 38.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'We'), ('images', 'images/xeV314e2.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/gWe014eZ.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 82.0)]),
      OrderedDict([('categories', 'mbuya'), ('culture', 'Pende'), ('images', 'images/Wj4914eB.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 59.0)]),
      OrderedDict([('categories', 't√©√©'), ('culture', 'Guere'), ('images', 'images/iRl114eZ.jpg'), ('materials', 'Metal'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 34.0)]),
      OrderedDict([('categories', 't√©√©'), ('culture', 'Bete'), ('images', 'images/ejj014er.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 35.5)]),
      OrderedDict([('categories', 'zro'), ('culture', 'Oubi'), ('images', 'images/qLP114e2.jpg'), ('materials', 'Vegetal'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 40.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'We'), ('images', 'images/ma381c7v.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 30.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/lSh81c7B.jpg'), ('materials', 'Metal'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 25.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/wTI81c72.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Igbo'), ('images', 'images/eac71c7c.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 26.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/5bI71c7j.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 25.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/Merd0c7n.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 22.5)]),
      OrderedDict([('categories', 'okuy'), ('culture', 'Punu'), ('images', 'images/HL771c78.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 33.0)]),
      OrderedDict([('categories', 'Helmet'), ('culture', 'Yaka'), ('images', 'images/SfFd0c7R.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 46.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Jimini'), ('images', 'images/RvVf3fe2.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 38.0)]),
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      OrderedDict([('categories', 'Other'), ('culture', 'We'), ('images', 'images/5bifad4J.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 20.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Ligbe'), ('images', 'images/5uo9ad4R.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 59.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/GGSf9d4g.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Guere'), ('images', 'images/NFra9d43.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 29.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'We'), ('images', 'images/iEBa9d49.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 42.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Guro'), ('images', 'images/LmS69d4G.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 31.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Guro'), ('images', 'images/5PR69d4E.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 41.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/DGL5fc4K.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 34.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Grebo'), ('images', 'images/fvo60d40.jpg'), ('materials', 'Natural'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 60.5)]),
      OrderedDict([('categories', 'ntomo'), ('culture', 'Bamana'), ('images', 'images/hcqcbc4p.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Mali'), ('size', 35.5)]),
      OrderedDict([('categories', 'zambl√©'), ('culture', 'Guro'), ('images', 'images/V7Vafc4x.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 37.0)]),
      OrderedDict([('categories', 'kpan'), ('culture', 'Baule'), ('images', 'images/cds1fc4p.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 51.0)]),
      OrderedDict([('categories', 'ngil'), ('culture', 'Fang'), ('images', 'images/6C072d4J.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 48.0)]),
      OrderedDict([('categories', 'pwo'), ('culture', 'Tshokwe'), ('images', 'images/qNz3ed45.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Angola'), ('size', 18.0)]),
      OrderedDict([('categories', 'kepong'), ('culture', 'Malagan'), ('images', 'images/wa6b7d4Q.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'New'), ('size', 82.0)]),
      OrderedDict([('categories', 'tatanua'), ('culture', 'Malagan'), ('images', 'images/iRj17d4X.jpg'), ('materials', 'Vegetal'), ('period', 'XIX-XXth'), ('region', 'New'), ('size', 54.0)]),
      OrderedDict([('categories', 'gle'), ('culture', 'Bete'), ('images', 'images/xaf8ec4b.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 33.0)]),
      OrderedDict([('categories', 'gle'), ('culture', 'Bete'), ('images', 'images/tjj7ec4K.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 33.0)]),
      OrderedDict([('categories', 'gle'), ('culture', 'Dan'), ('images', 'images/crH0ad4S.jpg'), ('materials', 'Mud'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 18.0)]),
      OrderedDict([('categories', 'gle'), ('culture', 'Dan'), ('images', 'images/zKd0ad4G.jpg'), ('materials', 'Mud'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 24.0)]),
      OrderedDict([('categories', 'mukinka'), ('culture', 'Salampasu'), ('images', 'images/efE84d4q.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 27.0)]),
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      OrderedDict([('categories', 'tatanua'), ('culture', 'Malagan'), ('images', 'images/XeFb5d53.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'New'), ('size', 42.5)]),
      OrderedDict([('categories', 'mukinka'), ('culture', 'Salampasu'), ('images', 'images/43U35d5y.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 30.0)]),
      OrderedDict([('categories', 'ngontang'), ('culture', 'Fang'), ('images', 'images/pfhe4d5D.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 29.0)]),
      OrderedDict([('categories', 'lukwakongo'), ('culture', 'Lega'), ('images', 'images/jAxe4d5K.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 17.5)]),
      OrderedDict([('categories', 'Passport'), ('culture', 'Dan'), ('images', 'images/68813d58.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Liberia'), ('size', 10.0)]),
      OrderedDict([('categories', 'epa'), ('culture', 'Yoruba'), ('images', 'images/Dzf43d58.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Nigeria'), ('size', 56.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Teotihuacan'), ('images', 'images/Ogdaca4v.jpg'), ('materials', 'Stone'), ('period', 'Classic'), ('region', 'Central'), ('size', 21.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Malagan'), ('images', 'images/yFT7384G.jpg'), ('materials', 'Shell'), ('period', 'XIX-XXth'), ('region', 'New'), ('size', 82.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Teotihuacan'), ('images', 'images/vXY4ec6h.jpg'), ('materials', 'Black'), ('period', 'Classic'), ('region', 'Central'), ('size', 18.4)]),
      OrderedDict([('categories', 'ikwar'), ('culture', 'Punu'), ('images', 'images/oFz6b94d.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 28.5)]),
      OrderedDict([('categories', 'ngkpw√©'), ('culture', 'Bamileke'), ('images', 'images/qi21794J.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Grasslands'), ('size', 39.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/ZVmd025c.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 20.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Dan'), ('images', 'images/2mbd025q.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Ivory'), ('size', 30.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Punu'), ('images', 'images/9ea316f7.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 30.0)]),
      OrderedDict([('categories', 'mukinka'), ('culture', 'Salampasu'), ('images', 'images/pvs326f2.jpg'), ('materials', 'Vegetal'), ('period', 'XIX-XXth'), ('region', 'Democratic'), ('size', 36.0)]),
      OrderedDict([('categories', 'okuy'), ('culture', 'Punu'), ('images', 'images/d0R3e5f0.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 34.0)]),
      OrderedDict([('categories', 'okuy'), ('culture', 'Punu'), ('images', 'images/7M3206fW.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 38.0)]),
      OrderedDict([('categories', 'okuy'), ('culture', 'Punu'), ('images', 'images/87g506fl.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Gabon'), ('size', 31.0)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Inuit'), ('images', 'images/NS66b93a.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Point'), ('size', 17.1)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Quileute'), ('images', 'images/LwL8b93S.jpg'), ('materials', 'Natural'), ('period', 'XIXth'), ('region', 'Northwest'), ('size', 33.5)]),
      OrderedDict([('categories', 'Other'), ('culture', 'Tsimshian'), ('images', 'images/QXnca93t.jpg'), ('materials', 'Wood'), ('period', 'XIX-XXth'), ('region', 'Northwest'), ('size', 20.0)]),
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    Routine trial
  LoopTerminator trials
